PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200,800]
  expName = Word Priming 
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent studytext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0,0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent test_text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Click to Submit
    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 'tshirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'l_apt_p'},
      {'test_words': '_ha_t'},
      {'test_words': 't_hi_t'},
      {'test_words': '_ou_e'},
      {'test_words': 'p_as_tr'},
      {'test_words': 'c_s_'},
      {'test_words': '_ru_is_'},
      {'test_words': 'p_li_e'},
      {'test_words': 'k_y_'},
      {'test_words': 'p_st_r'},
      {'test_words': '_o_rd'},
      {'test_words': '_a_bl_'},
      {'test_words': '_ho_e'},
      {'test_words': '_oo_'},
      {'test_words': 'c_s_io_'},
      {'test_words': 'ta_l_'},
      {'test_words': 'p_nc_l'},
      {'test_words': 'v_s_'},
      {'test_words': 'bo_t_e'},
      {'test_words': 'c_m_ra'}]
    Routine test
  LoopTerminator trials_2
