PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = animal words
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent right_rectangle
      fillColor = white
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent left_rectangle
      fillColor = white
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent left_image
      image [set every repeat] = $l_image
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_image
      image [set every repeat] = $r_image
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent trial_sound
      forceEndRoutine = False
      sound [set every repeat] = $target_sound
      speakerIndex = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.59
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    MouseComponent trial_mouse
      clickable = left_image, right_image, left_rectangle, right_rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start
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    PolygonComponent start_l_rect
      fillColor = white
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent start_r_rect
      fillColor = white
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent start_l_image
      image [set every repeat] = $l_image
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent start_r_image
      image [set every repeat] = $r_image
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent star
      fillColor = yellow
      lineColor = yellow
      shape = star7
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent start_mouse
      clickable = star
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('l_image', 'stimuli/dog.png'), ('r_image', 'stimuli/pig.png'), ('target_sound', 'stimuli/dog.wav'), ('correct', 'stimuli/dog.png')]),
      OrderedDict([('l_image', 'stimuli/penguin.png'), ('r_image', 'stimuli/tiger.png'), ('target_sound', 'stimuli/tiger.wav'), ('correct', 'stimuli/tiger.png')]),
      OrderedDict([('l_image', 'stimuli/pig.png'), ('r_image', 'stimuli/dog.png'), ('target_sound', 'stimuli/pig.wav'), ('correct', 'stimuli/pig.png')]),
      OrderedDict([('l_image', 'stimuli/tiger.png'), ('r_image', 'stimuli/penguin.png'), ('target_sound', 'stimuli/penguin.wav'), ('correct', 'stimuli/penguin.png')])]
    Routine start
    Routine trial
  LoopTerminator trials
